PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = collect_rewards_grid
  keyboardBackend = ioHub
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Routines
  Routine show_rewards
    ImageComponent grid_lines
      image = grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    ImageComponent target_reward
      flipVert = True
      image = coffee.png
      pos [set every repeat] = location
      size = (0.12, 0.12)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    KeyboardComponent key_next
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine walk_to_reward
    ImageComponent grid_walk
      image = grid.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent curr_pos
      image = footprints.png
      pos = location
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    KeyboardComponent next_step
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'square': 1, 'location': [-0.2, 0.2]},
      {'square': 2, 'location': [0, 0.2]},
      {'square': 3, 'location': [0.2, 0.2]},
      {'square': 4, 'location': [-0.2, 0]},
      {'square': 5, 'location': [0, 0]},
      {'square': 6, 'location': [0.2, 0]},
      {'square': 7, 'location': [-0.2, -0.2]},
      {'square': 8, 'location': [0, -0.2]},
      {'square': 9, 'location': [0.2, -0.2]},
      {'square': 4, 'location': [-0.2, 0]},
      {'square': 7, 'location': [-0.2, -0.2]},
      {'square': 1, 'location': [-0.2, 0.2]}]
    Routine show_rewards
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'square': 1, 'location': [-0.2, 0.2], 'loop_no': 1},
      {'square': 2, 'location': [0, 0.2], 'loop_no': 1},
      {'square': 3, 'location': [0.2, 0.2], 'loop_no': 1},
      {'square': 4, 'location': [-0.2, 0], 'loop_no': 1},
      {'square': 5, 'location': [0, 0], 'loop_no': 2},
      {'square': 6, 'location': [0.2, 0], 'loop_no': 2},
      {'square': 7, 'location': [-0.2, -0.2], 'loop_no': 2},
      {'square': 8, 'location': [0, -0.2], 'loop_no': 2},
      {'square': 9, 'location': [0.2, -0.2], 'loop_no': 3},
      {'square': 4, 'location': [-0.2, 0], 'loop_no': 3},
      {'square': 7, 'location': [-0.2, -0.2], 'loop_no': 3},
      {'square': 1, 'location': [-0.2, 0.2], 'loop_no': 3}]
    Routine walk_to_reward
  LoopTerminator trials_2
