PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = dell_compneuro_laptop
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1440]
  expName = 3x3_practice_v3
  keyboardBackend = ioHub
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Routines
  Routine show_rewards
    CodeComponent show_rew_code
      Code Type = Auto->JS
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      Begin Experiment:
        op_rewB = 0
        op_rewA = 0
        op_rewC = 0
        op_rewD = 0
      Begin Routine:
        time_start = globalClock.getTime()

        op_rewB = 0
        op_rewA = 0
        op_rewC = 0
        op_rewD = 0
      Each Frame:
        t_curr = globalClock.getTime()
        tim = t_curr - time_start
        if tim < 1.5:
            op_rewA = 1
        if (tim > 1.5) and (tim < 3):
            op_rewB = 1
            op_rewA = 0
        if (tim > 3) and (tim < 4.5):
            op_rewB = 0
            op_rewC = 1
        if (tim > 4.5) and (tim < 6):
            op_rewC = 0
            op_rewD = 1
        if (tim > 6) and (tim < 7):
            op_rewD = 0
            op_rewA = 1
        if (tim > 7) and (tim < 8):
            op_rewB = 1
            op_rewA = 0
        if (tim > 8) and (tim < 9):
            op_rewB = 0
            op_rewC = 1
        if tim > 9:
            op_rewC = 0
            op_rewD = 1
    ImageComponent sand_pirate
      image = images/sand_3x3grid_pirate.png
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.
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    ImageComponent reward_A
      image = images/coin.png
      opacity [set every frame] = op_rewA
      pos [set every repeat] = (rew_x_A, rew_y_A)
      size = (0.1, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent reward_B
      image = images/coin.png
      opacity [set every frame] = op_rewB
      pos [set every repeat] = (rew_x_B, rew_y_B)
      size = (0.1, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent reward_C
      image = images/coin.png
      opacity [set every frame] = op_rewC
      pos [set every repeat] = (rew_x_C, rew_y_C)
      size = (0.1, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent reward_D
      image = images/coin.png
      opacity [set every frame] = op_rewD
      pos [set every repeat] = (rew_x_D, rew_y_D)
      size = (0.1, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine task
    CodeComponent task_code
      Code Type = Py
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      Before Experiment:
        # add another output table.
        # Ensure that relative paths start from the same directory as this script
        _thisDir = os.path.dirname(os.path.abspath(__file__))
        # info about the experiment session

        expInfo = {'participant': '', 'session': '001'}
        expInfo['date'] = data.getDateStr()  # add a simple timestamp

        result_name = filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expInfo['participant'], expInfo['date'], 'results')
        resultTbl = data.ExperimentHandler(name='musicbox_practice', version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath='C:\\Users\\behrenslab-fmrib\\Documents\\Psychopy\\musicbox\\experiment\\3x3_practice_v2.py',
            savePickle=True, saveWideText=True,
            dataFileName=result_name)
      Begin Experiment:
        from psychopy.core import wait as wait
        import random

        states = ['A', 'B', 'C', 'D']
        field_nos = ['','','','']

        rew_visible = 1

        printing = 'nothing happened yet'
        print(printing)

        curr_x = 0
        curr_y = 0
      Begin Routine:
        rew_visible = 0
        A_visible = 0
        index_rew = [0,0]
        no_keys_pressed = [0]

        # flush out all potentially recorded button press events
        nav_key_task.clearEvents()
        loop_no = 0

        rew_x = [rew_x_A, rew_x_B, rew_x_C, rew_x_D]
        rew_y = [rew_y_A, rew_y_B, rew_y_C, rew_y_D]
        print(f'these are the new reward locations: xABCD {rew_x}, yABCD {rew_y}')

        #rew_x = [75/100, 75/100, -75/100, 75/100]
        #rew_y = [75/100, -75/100, -25/100, -25/100]
        states = ['A', 'B', 'C', 'D']
        field_nos = ['','','','']
        msg = ''

        thisExp.nextEntry()
        thisExp.addData('next_task', globalClock.getTime())
        states = ['A', 'B', 'C', 'D']
        field_nos = ['','','','']
        msg = ''
        resultTbl.nextEntry()
        resultTbl.addData('next_task', globalClock.getTime())
        resultTbl.addData('round_no', Round)
        resultTbl.addLoop(rep_runs)  # add the loop to the experiment

        # i have 2000ms. every 10 ms, I want to move this thing.
        # this means that I will move the thing 200 times.

        interval = 0.05
        move_timer = []
        move_timer.append(globalClock.getTime())
        move_counter = 0
        time_at_press = globalClock.getTime()
        key1_press_trigger = 0
        key2_press_trigger = 0
        key3_press_trigger = 0
        key4_press_trigger = 0

        progress_bar_on = 0
        progress_timer = []
        progress_timer.append(globalClock.getTime())
        reward_waiting = random.uniform(2.2, 3.5)
      Each Frame:
        loop_no += 1
        #TRs = TR_count.getKeys(keyList = ['5'], clear = False)
        #if len(TRs) > 0:
        #    print(TRs[-1].name)

        # first check if you have found the final reward.
        if index_rew[-1] == len(states):
            reward_waiting = random.uniform(2.2, 3.5)
            print('now it should continue')
            wait(reward_waiting)
            break

        # activate these only if just starting or if a step has been made
        if loop_no == 1:
            thisExp.addData('start_ABCD_screen', globalClock.getTime())
            resultTbl.addData('start_ABCD_screen', globalClock.getTime())
            #if len(TRs) > 0:
                #thisExp.nextEntry()
                #thisExp.addData('first_task_TR', TRs[0].rt)
                #print(TRs.rt[0])
            curr_state = states[index_rew[-1]]
            curr_rew_x = rew_x[index_rew[-1]]
            curr_rew_y = rew_y[index_rew[-1]]


        if (key1_press_trigger == 0) and (key2_press_trigger == 0) and (key3_press_trigger == 0) and (key4_press_trigger == 0):
            keys = nav_key_task.getKeys(keyList = ['1', '2', '3', '4'], clear = False)
            no_keys_pressed.append(len(keys))

        if len(keys) > 0:
            # first check if you last found a reward. this means that you can't
            # react to key presses for a bit.
            if index_rew[-1] > index_rew[-2]:
                # enter loop where you framewise increase the progress_height
                # until the reward_wait time is elapsed.
                if progress_bar_on == 0:
                    reward_waiting = random.uniform(2.2, 3.5)
                    last_height = height_progress
                    time_rew_found = globalClock.getTime()
                    progress_update = time_rew_found + interval
                    progress_bar_on = 1
                if progress_timer[-1] < time_rew_found+reward_waiting:
                    progress_timer.append(globalClock.getTime())
                    if progress_timer[-1] >= progress_update:
                        #it can be max 0.43 long. I have 3 repeats and 4 rews. > increase by 0.035 each rew
                        # I now have variable repeats. reps_per_run
                        height_progress += ((0.41/(4*reps_per_run))/(reward_waiting/interval))
                        progress_update += interval #increment by 100ms
                if progress_timer[-1] >= time_rew_found+reward_waiting:
                    height_progress = last_height + (0.41/(4*reps_per_run))
                    progress_bar_on = 0
                    print('done progress bar update')
                    # and save that you made a step.
                    thisExp.addData('t_reward_afterwait', globalClock.getTime())
                    resultTbl.addData('t_reward_afterwait', globalClock.getTime())
                    # and make it invisible again
                    rew_visible = 0
                    A_visible = 0
                    # and add the same last value, so it wouldn't enter this loop again.
                    index_rew.append(index_rew[-1])
                    # and update the reward!! now off to find the next one.
                    curr_state = states[index_rew[-1]]
                    curr_rew_x = rew_x[index_rew[-1]]
                    curr_rew_y = rew_y[index_rew[-1]]
                    print(f'Reward found and waited! These should all be 0: key 1:{key1_press_trigger} key 2:{key2_press_trigger} key3:{key3_press_trigger} key 4:{key4_press_trigger}')
                    print(f'this is current x: {curr_x}, reward x: {curr_rew_x}, and current y: {curr_y}, reward y: {curr_rew_y}.')
            # if you didnt last found a reward, you can check for key presses.
            # then check if a new key has been pressed or if we are still updating the position.
            elif (no_keys_pressed[-1] > no_keys_pressed[-2]) or (key1_press_trigger == 1) or (key2_press_trigger == 1) or (key3_press_trigger == 1) or (key4_press_trigger == 1):
                # check which key has been pressed
                #define how long the steps are supposed to be
                if (keys[-1].name == '1') or (key1_press_trigger == 1):
                    if (curr_x> -21/100):
                        key1_press_trigger = 1
                        if move_counter == 0:
                            last_x = curr_x
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            move_counter = 1
                            isi = random.uniform(1.5, 2.5)
                            thisExp.addData('length_step', isi)
                            resultTbl.addData('length_step', isi)
                            print(isi)
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            if move_timer[-1] >= update_timer:
                                curr_x -= ((21/100)/(isi/interval))
                                update_timer += interval #increment by 100ms
                                if curr_x < -21/100:
                                    curr_x = -21/100
                        if move_timer[-1] >= time_at_press+isi:
                            curr_x = last_x - 21/100
                            move_counter = 0
                            key1_press_trigger = 0
                            print('done moving 1')
                            print(f'this is current x: {curr_x}, reward x: {curr_rew_x}, and current y: {curr_y}, reward y: {curr_rew_y}.')
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            resultTbl.nextEntry()
                            resultTbl.addData('curr_loc_x', curr_x)
                            resultTbl.addData('curr_loc_y', curr_y)
                            resultTbl.addData('curr_rew_x', curr_rew_x)
                            resultTbl.addData('curr_rew_y', curr_rew_y)
                            resultTbl.addData('t_step_since_curr_run', keys[-1].rt)
                            resultTbl.addData('t_step_tglobal', globalClock.getTime())
                            resultTbl.addData('repeat', rep_runs.thisRepN)
                # check which key has been pressed
                if (keys[-1].name == '2') or (key2_press_trigger == 1):
                    if curr_y < 29/100:
                        key2_press_trigger = 1
                        if move_counter == 0:
                            last_y = curr_y
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            move_counter = 1
                            isi = random.uniform(1.5, 2.5)
                            thisExp.addData('length_step', isi)
                            resultTbl.addData('length_step', isi)
                            print(isi)
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            if move_timer[-1] >= update_timer:
                                curr_y += ((29/100)/(isi/interval))
                                update_timer += interval #increment by 100ms
                                if curr_y > 29/100:
                                    curr_y = 29/100
                        if move_timer[-1] >= time_at_press+isi:
                            curr_y = last_y + 29/100
                            move_counter = 0
                            key2_press_trigger = 0
                            print('done moving 2')
                            print(f'this is current x: {curr_x}, reward x: {curr_rew_x}, and current y: {curr_y}, reward y: {curr_rew_y}.')
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            resultTbl.nextEntry()
                            resultTbl.addData('curr_loc_x', curr_x)
                            resultTbl.addData('curr_loc_y', curr_y)
                            resultTbl.addData('curr_rew_x', curr_rew_x)
                            resultTbl.addData('curr_rew_y', curr_rew_y)
                            resultTbl.addData('t_step_since_curr_run', keys[-1].rt)
                            resultTbl.addData('t_step_tglobal', globalClock.getTime())
                # check which key had been pressed
                if (keys[-1].name == '3') or (key3_press_trigger == 1):
                    if curr_y > -29/100:
                        key3_press_trigger = 1
                        if move_counter == 0:
                            last_y = curr_y
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            move_counter = 1
                            isi = random.uniform(1.5, 2.5)
                            thisExp.addData('length_step', isi)
                            resultTbl.addData('length_step', isi)
                            print(isi)
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            if move_timer[-1] >= update_timer:
                                curr_y -= ((29/100)/(isi/interval))
                                update_timer += interval #increment by 100ms
                                if curr_y < -29/100:
                                    curr_y = -29/100
                        if move_timer[-1] >= time_at_press+isi:
                            curr_y = last_y - 29/100
                            move_counter = 0
                            key3_press_trigger = 0
                            print('done moving 3')
                            print(f'this is current x: {curr_x}, reward x: {curr_rew_x}, and current y: {curr_y}, reward y: {curr_rew_y}.')
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            resultTbl.nextEntry()
                            resultTbl.addData('curr_loc_x', curr_x)
                            resultTbl.addData('curr_loc_y', curr_y)
                            resultTbl.addData('curr_rew_x', curr_rew_x)
                            resultTbl.addData('curr_rew_y', curr_rew_y)
                            resultTbl.addData('t_step_since_curr_run', keys[-1].rt)
                            resultTbl.addData('t_step_tglobal', globalClock.getTime())
                # check which keys have been pressed
                if (keys[-1].name == '4') or (key4_press_trigger == 1):
                    if curr_x < 21/100:
                        key4_press_trigger = 1
                        if move_counter == 0:
                            last_x = curr_x
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            move_counter = 1
                            isi = random.uniform(1.5, 2.5)
                            thisExp.addData('length_step', isi)
                            resultTbl.addData('length_step', isi)
                            print(isi)
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            if move_timer[-1] >= update_timer:
                                curr_x += ((21/100)/(isi/interval))
                                update_timer += interval #increment by 100ms
                                if curr_x > 21/100:
                                    curr_x = 21/100
                        if move_timer[-1] >= time_at_press+isi:
                            curr_x = last_x + 21/100
                            move_counter = 0
                            key4_press_trigger = 0
                            print('done moving 4')
                            print(f'this is current x: {curr_x}, reward x: {curr_rew_x}, and current y: {curr_y}, reward y: {curr_rew_y}.')
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            resultTbl.nextEntry()
                            resultTbl.addData('curr_loc_x', curr_x)
                            resultTbl.addData('curr_loc_y', curr_y)
                            resultTbl.addData('curr_rew_x', curr_rew_x)
                            resultTbl.addData('curr_rew_y', curr_rew_y)
                            resultTbl.addData('t_step_since_curr_run', keys[-1].rt)
                            resultTbl.addData('t_step_tglobal', globalClock.getTime())

                # then check if reward location and curr loc are the same
                if (curr_x == curr_rew_x) and (curr_y == curr_rew_y):
                    # display something if it's A
                    if (curr_rew_x == rew_x_A) and (curr_rew_y == rew_y_A):
                        A_visible = 1
                    # go to next reward
                    index_rew.append(index_rew[-1]+1)
                    print('found reward')
                    # show the reward!
                    rew_visible = 1
                    thisExp.addData('rew_loc_x', curr_rew_x)
                    thisExp.addData('rew_loc_y', curr_rew_y)
                    thisExp.addData('t_reward_start', globalClock.getTime())
                    thisExp.addData('reward_delay', reward_waiting)
                    resultTbl.addData('rew_loc_x', curr_rew_x)
                    resultTbl.addData('rew_loc_y', curr_rew_y)
                    resultTbl.addData('t_reward_start', globalClock.getTime())
                    resultTbl.addData('reward_delay', reward_waiting)
                    progress1 = 0

        # check if the safety key has been pressed
        safety_key = break_key.getKeys(keyList = ['0'], clear = False)
        if len(safety_key) > 0:
            curr_x = 0
            curr_y = 0


        # then let everything update all the shapes.
      End Experiment:
        resultTbl.saveAsWideText(result_name+'.csv', delim='auto')
        resultTbl.saveAsPickle(result_name)
    ImageComponent sand_box
      image = images/sand_3x3grid_box.png
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent foot
      image = images/footprints_buttons.png
      pos [set every frame] = (curr_x, curr_y)
      size = (0.2, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent reward
      image = images/coin.png
      opacity [set every frame] = rew_visible
      pos [set every frame] = (curr_rew_x, curr_rew_y)
      size = (0.1, 0.13)
      startVal [time (s)] = 0.0
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    KeyboardComponent nav_key_task
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent break_key
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent progressbar_background
      fillColor = 0.0902, -0.4588, -0.8510
      lineColor = 0.0902, -0.4588, -0.8510
      pos = (-0.5, -0.21)
      shape = rectangle
      size = (0.1, 0.41)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar
      fillColor = 0.7098, 0.2941, -0.7490
      pos = (-0.5, -0.21)
      shape = rectangle
      size [set every frame] = (0.1, height_progress)
      startVal [time (s)] = 0.0
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    ImageComponent reward_progress
      image = images/coin.png
      opacity [set every frame] = rew_visible
      pos = (-0.65, -0.21)
      size = (0.1, 0.13)
      startVal [time (s)] = 0.0
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    TextComponent plus_coin_txt
      color = black
      letterHeight = 0.05
      opacity [set every frame] = rew_visible
      pos = (-0.65, -0.3)
      startVal [time (s)] = 0.0
      text = +1 coin
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    TextComponent reward_A_feedback
      letterHeight = 0.07
      opacity [set every frame] = A_visible
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = "Arrr! Ye've struck gold 1 of 4 with yer keen eye!"
      wrapWidth = 0.4
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  Routine new_rewards_prep
    ImageComponent new_rewards
      image = images/sand_3x3grid_pirate_new.png
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine parrot_tip
    ImageComponent parrot
      image = images/parrot_tip.png
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine feedback_screen
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg = ''
      Begin Routine:
        feedback_msg= f'You were better than {feedback}% of the candidates. Try to be even more precise and walk only the same routes to impress me!'
    ImageComponent background_feedback
      image = images/pirate_withou_text.jpg
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent feedback_text
      color = -0.1765, -0.1765, -0.1765
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $feedback_msg
      wrapWidth = 0.85
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  Routine intro_0
    ImageComponent ship_intro_0
      image = images/pirates.jpg
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text
      letterHeight = 0.2
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Ahoy, landlubber!
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    ImageComponent ship_box_intro_0
      image = images/ship_box.png
      size = (2, 2)
      startVal [time (s)] = 2.5
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    TextComponent text_intro_0
      letterHeight = 0.05
      startVal [time (s)] = 2.5
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      text:
        You have grown weary of life on land and decided to embark on an adventure, aiming to become a part of the renowned pirate crew aboard the majestic ship "Sea Serpent's Fury." However, you face a minor setback, as there are several other candidates also vying to join the crew at the same time. To assess your treasure-hunting capabilities, the Captain Seraphina Storme has arranged a test for you and the other candidates.

        Press 1 to continue!
    KeyboardComponent next_intro_0
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_1
    ImageComponent ship_box_intro_1
      image = images/ship_box.png
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text_intro_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On a secluded and sandy island, the captain will evaluate how well you can locate treasures hidden by the pirates. Depending on your performance, your chances of fulfilling your dream of becoming a true pirate will increase.

        You will be provided with one set of coordinates for the treasures, which you must find in a specific order.

        Press 1 to continue!
    KeyboardComponent next_intro_1
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_2
    ImageComponent treasure_box_intro_2
      image = images/map_w_txt.png
      size = (2,2)
      startVal [time (s)] = 0.0
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    TextComponent text_intro_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        To navigate through the sand, you can use the keys 1, 2, 3, and 4.
        Please use your right hand so that your index finger (1) will take you left, your middle finger (2) moves you north, your ring finger (3) leads you south, and your little finger (4) guides you right.

        Press 1 to start the practice!
    KeyboardComponent next_intro_2
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent navigation_img
      image = images/footprints_buttons.png
      pos = (0, -0.6)
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
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  Routine up_down_practice
    CodeComponent code_updown
      Code Type = Py
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      Begin Routine:
        curr_x = 0
        curr_y = 0

        all_locs_been_to = False
        locs_walked =[]

        no_keys_pressed = [0]
        nav_vert_key.clearEvents()
        nav_vert_key.keys = []
        nav_vert_key.rt = []

        msg = "Use your middle finger to go up and your ring finger to go down."
        isi = 2.5


        interval = 0.05
        move_timer = []
        move_timer.append(globalClock.getTime())
        move_counter = 0
        time_at_press = globalClock.getTime()
        key1_press_trigger = 0
        key2_press_trigger = 0
        key3_press_trigger = 0
        key4_press_trigger = 0
        loopno = 0
      Each Frame:
        loopno += 1

        # first check if you practiced enough.
        if all_locs_been_to == True:
            #wait(2)
            break

        isi = 2.5

        if (key2_press_trigger == 0) and (key3_press_trigger == 0):
            keys = nav_vert_key.getKeys(keyList = ['2', '3'], clear = False)
            no_keys_pressed.append(len(keys))

        print(f'whats up with the keys: key length is {len(keys)}, key 1 pressed {key2_press_trigger} {key3_press_trigger}')

        if len(keys) > 0:
            # check if a new key has been pressed or if we are still updating the position.
            if (no_keys_pressed[-1] > no_keys_pressed[-2]) or (key2_press_trigger == 1) or (key3_press_trigger == 1):
                # check which key has been pressed
                if (keys[-1].name == '2') or (key2_press_trigger == 1):
                    if curr_y < 29/100:
                        key2_press_trigger = 1
                        if move_counter == 0:
                            print('start moving up')
                            last_y = curr_y
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            move_counter = 1
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            if move_timer[-1] >= update_timer:
                                curr_y += ((28/100)/(isi/interval))
                                update_timer += interval #increment by 100ms
                        elif move_timer[-1] >= time_at_press+isi:
                            curr_y = last_y + 29/100
                            move_counter = 0
                            key2_press_trigger = 0
                            print('done moving 2')
                            direc = 'up'
                            # add the location to the location you walked.
                            locs_walked.append(curr_y)
                            msg = f"Well done! You walked {direc}. Take some more steps!"
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            thisExp.addData('length_step', isi)
                # check which key had been pressed
                if (keys[-1].name == '3') or (key3_press_trigger == 1):
                    print(f'current position is {curr_y}. It needs to be bigger than -29/100')
                    if curr_y > -29/100:
                        key3_press_trigger = 1
                        if move_counter == 0:
                            print('start moving down')
                            last_y = curr_y
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            print(f'update from now ({time_at_press}) until {time_at_press+isi}.')
                            move_counter = 1
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            print(f'check if move timer works. should get to bigger then {time_at_press+isi} and then end step. Its now: {move_timer[-1]}')
                            if move_timer[-1] >= update_timer:
                                curr_y -= ((28/100)/(isi/interval))
                                update_timer += interval #increment by 100ms
                        elif move_timer[-1] >= time_at_press+isi:
                            curr_y = last_y - 29/100
                            move_counter = 0
                            key3_press_trigger = 0
                            print('done moving 3')
                            direc = 'down'
                            # add the location to the location you walked.
                            locs_walked.append(curr_y)
                            msg = f"Well done! You walked {direc}. Take some more steps!"
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            thisExp.addData('length_step', isi)

        # then check if you already walked along the whole line
        if no_keys_pressed[-1] > 10:
            print(f'you pressed {no_keys_pressed[-1]} keys.')
            all_locs_been_to = set([-29/100, 0, 29/100]).issubset(set(locs_walked))
            msg = f"Nice! You seem to be comfortable walking along a vertical line."
    ImageComponent parrot_updown_empty
      image = images/parrot_no_txt.png
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    TextComponent help_txt_updown
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = 'Arrrr! You look like my favorite future pirate. I will help you!'
      wrapWidth = 1
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    ImageComponent updown_pract
      image = images/updown_parrot.png
      size = (2,2)
      startVal [time (s)] = 3.5
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    TextComponent feedback_updown_txt
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 3.5
      text [set every frame] = $msg
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    KeyboardComponent nav_vert_key
      allowedKeys = '2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent foot_vert
      image = images/footprints_buttons.png
      pos [set every frame] = (curr_x, curr_y)
      size = (0.2, 0.26)
      startVal [time (s)] = 3.5
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  Routine left_right_practice
    CodeComponent code_leftright
      Code Type = Py
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      Begin Routine:
        curr_x = 0
        curr_y = 0

        all_locs_been_to = False
        locs_walked =[]

        no_keys_pressed = [0]
        nav_horz_key.clearEvents()
        nav_horz_key.keys = []
        nav_horz_key.rt = []

        msg = "Use your little finger to go left and your index finger to go right."
        isi = 2.5


        interval = 0.05
        move_timer = []
        move_timer.append(globalClock.getTime())
        move_counter = 0
        time_at_press = globalClock.getTime()
        key1_press_trigger = 0
        key2_press_trigger = 0
        key3_press_trigger = 0
        key4_press_trigger = 0
        loopno = 0
      Each Frame:
        loopno += 1

        # first check if you practiced enough.
        if all_locs_been_to == True:
            #wait(2)
            break

        isi = 2.5

        if (key1_press_trigger == 0) and (key4_press_trigger == 0):
            keys = nav_horz_key.getKeys(keyList = ['1', '4'], clear = False)
            no_keys_pressed.append(len(keys))

        if len(keys) > 0:
            # check if a new key has been pressed or if we are still updating the position.
            if (no_keys_pressed[-1] > no_keys_pressed[-2]) or (key1_press_trigger == 1) or (key4_press_trigger == 1):
                # check which key has been pressed
                if (keys[-1].name == '1') or (key1_press_trigger == 1):
                    if curr_x > -21/100:
                        key1_press_trigger = 1
                        if move_counter == 0:
                            last_x = curr_x
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            move_counter = 1
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            if move_timer[-1] >= update_timer:
                                curr_x -= ((20/100)/(isi/interval))
                                update_timer += interval #increment by 100ms
                        elif move_timer[-1] >= time_at_press+isi:
                            curr_x = last_x - 21/100
                            move_counter = 0
                            key1_press_trigger = 0
                            direc = 'to the left'
                            # add the location to the location you walked.
                            locs_walked.append(curr_x)
                            msg = f"Well done! You walked {direc}. Take some more steps!"
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            thisExp.addData('length_step', isi)
                # check which key had been pressed
                if (keys[-1].name == '4') or (key4_press_trigger == 1):
                    if curr_x < 21/100:
                        key4_press_trigger = 1
                        if move_counter == 0:
                            last_x = curr_x
                            time_at_press = globalClock.getTime()
                            update_timer = time_at_press + interval
                            move_counter = 1
                        if move_timer[-1] < time_at_press+isi:
                            move_timer.append(globalClock.getTime())
                            if move_timer[-1] >= update_timer:
                                curr_x += ((20/100)/(isi/interval))
                                update_timer += interval
                        elif move_timer[-1] >= time_at_press+isi:
                            curr_x = last_x + 21/100
                            move_counter = 0
                            key4_press_trigger = 0
                            direc = 'to the right'
                            # add the location to the location you walked.
                            locs_walked.append(curr_x)
                            msg = f"Well done! You walked {direc}. Take some more steps!"
                            # and save that you made a step.
                            thisExp.nextEntry()
                            thisExp.addData('curr_loc_x', curr_x)
                            thisExp.addData('curr_loc_y', curr_y)
                            thisExp.addData('t_step_from_start_currrun', keys[-1].rt)
                            thisExp.addData('t_step_tglobal', globalClock.getTime())
                            thisExp.addData('length_step', isi)

        # then check if you already walked along the whole line
        if no_keys_pressed[-1] > 10:
            print(f'you pressed {no_keys_pressed[-1]} keys.')
            all_locs_been_to = set([-21/100, 0, 21/100]).issubset(set(locs_walked))
            msg = f"Nice! You seem to be comfortable walking along a horizontal line."
    ImageComponent left_right_pract
      image = images/leftright_parrot.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent foot_leftright
      image = images/footprints_buttons.png
      pos [set every frame] = (curr_x, curr_y)
      size = (0.2, 0.26)
      startVal [time (s)] = 0.0
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    TextComponent intro_leftright
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text = 'Arrrr! Well done! Now walk to the left and to the right.'
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    TextComponent feedback_leftright
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 4.5
      text [set every frame] = $msg
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    KeyboardComponent nav_horz_key
      allowedKeys = '1', '4'
      forceEndRoutine = False
      startVal [time (s)] = 4.5
      store = all keys
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  Routine summary_intro
    ImageComponent summary_parrot
      image = images/summary_parrot.png
      size = (2,2)
      startVal [time (s)] = 0.0
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    KeyboardComponent next_summary_key
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro_0
  Routine intro_1
  Routine intro_2
  Routine up_down_practice
  Routine left_right_practice
  Routine summary_intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pract_cond_3x3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Round': 0, 'lower_isi': 1.5, 'upper_isi': 2, 'rew_x_A': 0.21, 'rew_y_A': 0.29, 'rew_x_B': 0.21, 'rew_y_B': -0.29, 'rew_x_C': 0, 'rew_y_C': 0, 'rew_x_D': -0.21, 'rew_y_D': 0.29, 'height_progress': 0, 'feedback': 34, 'reps_per_run': 10},
      {'Round': 1, 'lower_isi': 1.5, 'upper_isi': 2, 'rew_x_A': 0, 'rew_y_A': -0.29, 'rew_x_B': -0.21, 'rew_y_B': 0, 'rew_x_C': 0, 'rew_y_C': 0.29, 'rew_x_D': 0.21, 'rew_y_D': 0, 'height_progress': 0, 'feedback': 48, 'reps_per_run': 10},
      {'Round': 2, 'lower_isi': 1.5, 'upper_isi': 2, 'rew_x_A': -0.21, 'rew_y_A': 0, 'rew_x_B': 0, 'rew_y_B': 0.29, 'rew_x_C': 0.21, 'rew_y_C': 0, 'rew_x_D': 0, 'rew_y_D': -0.29, 'height_progress': 0, 'feedback': 46, 'reps_per_run': 8},
      {'Round': 3, 'lower_isi': 1.5, 'upper_isi': 2, 'rew_x_A': -0.21, 'rew_y_A': -0.29, 'rew_x_B': 0.21, 'rew_y_B': 0.29, 'rew_x_C': 0.21, 'rew_y_C': -0.29, 'rew_x_D': 0, 'rew_y_D': 0.29, 'height_progress': 0, 'feedback': 53, 'reps_per_run': 8},
      {'Round': 4, 'lower_isi': 1.5, 'upper_isi': 2, 'rew_x_A': -0.21, 'rew_y_A': 0.29, 'rew_x_B': 0.21, 'rew_y_B': 0.29, 'rew_x_C': 0.21, 'rew_y_C': -0.29, 'rew_x_D': -0.21, 'rew_y_D': -0.29, 'height_progress': 0, 'feedback': 57, 'reps_per_run': 6},
      {'Round': 5, 'lower_isi': 1.5, 'upper_isi': 2, 'rew_x_A': -0.21, 'rew_y_A': 0.29, 'rew_x_B': 0, 'rew_y_B': 0, 'rew_x_C': 0.21, 'rew_y_C': -0.29, 'rew_x_D': 0.21, 'rew_y_D': 0.29, 'height_progress': 0, 'feedback': 55, 'reps_per_run': 6}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
    Routine new_rewards_prep
    Routine parrot_tip
    Routine show_rewards
    LoopInitiator rep_runs loopType="TrialHandler"
      loopType = sequential
      nReps = reps_per_run
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      Routine task
    LoopTerminator rep_runs
    Routine feedback_screen
  LoopTerminator trials
